PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = device-switching_baseline
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Routines
  Routine stimulus
    CodeComponent control_display
      Code Type = Py
      Begin Experiment:
        ## Define another window at beginning of experiment on alternate display
        win1 = visual.Window(
            size=(1024, 768), fullscr=True, screen=1,
            winType='pyglet', allowGUI=False, allowStencil=False,
            monitor='testMonitor', color=[0,0,0], colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='height')
      Begin Routine:
        ## Determine which display receives the stimulus
        if display == 1:
            stim_win = win1
            blank_win = win
        else:
            stim_win = win
            blank_win = win1

        ## Update 'win' attributes of stimulus and blank slides with appropriate display
        stimulus_text.win = stim_win
        blank_text.win = blank_win
      Each Frame:
        ## Continuously refresh alternate display
        ## (Refreshing of main display is programmed in by default)
        if continueRoutine:
            win1.flip()
    TextComponent stimulus_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimulus
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    KeyboardComponent stimulus_resp
      allowedKeys = 'j', 'k', 'd', 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent blank_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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  Routine isi
    CodeComponent control_display_isi
      Code Type = Py
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      Begin Routine:
        ## assign isi_blank1 text slide to alternate display
        isi_blank1.win=win1
      Each Frame:
        ## continuous refreshing screen while routine is running
        if continueRoutine:
            win1.flip()
    TextComponent isi_blank0
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent isi_blank1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space bar to begin.
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  Routine error
    CodeComponent error_check
      Code Type = Py
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      Begin Routine:
        ## Standard error check
        if stimulus_resp.keys == cor_mag_resp or stimulus_resp.keys == cor_par_resp:
            continueRoutine = False

        ## Display error text on same slide as stimulus
        error_text.win = stim_win
      Each Frame:
        ## Continuous refreshing of alternate display
        if continueRoutine:
            win1.flip()
    TextComponent error_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = ERROR!
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Flow
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimulus', 1), ('display', 1), ('cor_mag_resp', 'j'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 2), ('display', 1), ('cor_mag_resp', 'j'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 3), ('display', 1), ('cor_mag_resp', 'j'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 4), ('display', 1), ('cor_mag_resp', 'j'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 6), ('display', 1), ('cor_mag_resp', 'k'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 7), ('display', 1), ('cor_mag_resp', 'k'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 8), ('display', 1), ('cor_mag_resp', 'k'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 9), ('display', 1), ('cor_mag_resp', 'k'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 1), ('display', 2), ('cor_mag_resp', 'j'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 2), ('display', 2), ('cor_mag_resp', 'j'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 3), ('display', 2), ('cor_mag_resp', 'j'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 4), ('display', 2), ('cor_mag_resp', 'j'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 6), ('display', 2), ('cor_mag_resp', 'k'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 7), ('display', 2), ('cor_mag_resp', 'k'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 8), ('display', 2), ('cor_mag_resp', 'k'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 9), ('display', 2), ('cor_mag_resp', 'k'), ('cor_par_resp', 'k')])]
    Routine isi
    Routine stimulus
    Routine error
  LoopTerminator trials
