PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.75,0.75,0.75]
  expName = visual-search_exp1
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Routines
  Routine trial1
    CodeComponent FrameCode
      Code Type = Py
      Begin Routine:
        lineWidth = 4

        dhg = DrawHexGrid([-400, 400])

        dhg.make_grid()

        psychopy.event.waitKeys(keyList = ['space'])

        win.flip()
    CodeComponent GlobalDefinitions
      Code Type = Py
      Before Experiment:
        import psychopy

        ## print_line_widths
        ## ^ flag for troubleshooting

        class DrawHexGrid:
            '''
            The general idea here is to think, for any given hexagon I want to draw, what position (eg, top left) in the hex am i starting at, what position do i want to finish at, and what's the starting coordinate
            Given this information, we rely on the formulas below to draw however many lines are needed to connect the starting position to the ending position
            In the process, I save out starting coordinates that will be used for the next hexagon and for the first hexagon in a new row, as well as handling some other edge case things

            Formula for calculating coordinates:
            xx = x + (d * cos(alpha))
            yy = y + (d * sin(alpha))
            '''
            def __init__(self, top_left_origin, edge_length = 120, x_count = 4, y_count = 4):
                ## print_line_widths
                self.build_diagnostic_container = True
                self.build_diagnostic_count = 0
                self.diagnostic_container = []
                self.diagnostic_widths = []

                self.top_left_origin = top_left_origin
                self.edge_length = edge_length
                self. x_count = x_count
                self.y_count = y_count
                self.point_list = ['top_left', 'bottom_left', 'bottom', 'bottom_right', 'top_right', 'top']
                self.point_dictionary = {
        'top_left': '[start_coord[0], start_coord[1] - self.edge_length]',
        'bottom_left': '[start_coord[0] + self.edge_length * cos(120), start_coord[1] - self.edge_length * sin(120)]',
        'bottom': '[start_coord[0] + self.edge_length * cos(120), start_coord[1] + self.edge_length * sin(120)]',
        'bottom_right': '[start_coord[0], start_coord[1] + self.edge_length]',
        'top_right': '[start_coord[0] - self.edge_length * cos(120), start_coord[1] + self.edge_length * sin(120)]',
        'top': '[start_coord[0] - self.edge_length * cos(120), start_coord[1] - self.edge_length * sin(120)]'
        }

            def make_grid(self):
                for row in range(self.y_count):
                    for col in range(self.x_count):
                        ## print_line_widths
                        self.row = row
                        self.col = col

                        ## if it's the first hex
                        if not row and not col:
                            ## print_line_widths
                            if self.build_diagnostic_count:
                                self.build_diagnostic_container = False
                            else:
                                self.build_diagnostic_count += 1

                            ## reset the line width drawer
                            self.line_width_container_draw = copy.deepcopy(line_width_container_original)

                            self._draw_hex('top_left', 'top_left', self.top_left_origin)
                            self.first_row_start_coord = self._coord_calculator(self.top_left_origin, 'top_left', 2)
                            self.new_hex_start_coord = self._coord_calculator(self.top_left_origin, 'top_left', 3)

                        ## if it's the first row
                        elif not row:
                            self._draw_hex('bottom_left', 'top_left', self.new_hex_start_coord)
                            self.new_hex_start_coord = self._coord_calculator(self.new_hex_start_coord, 'bottom_left', 2)

                        ## if it's the first column
                        elif not col:

                            ## conditional to account for the staggered pattern
                            if not row % 2:
                            ## if even
                                start_pos = 'top'
                                new_hex_n_turns = 4
                                first_row_n_turns = 3

                            else:
                            ## if odd
                                start_pos = 'top_left'
                                new_hex_n_turns = 3
                                first_row_n_turns = 1

                            self._draw_hex(start_pos, 'top_right', self.first_row_start_coord)
                            self.new_hex_start_coord = self._coord_calculator(self.first_row_start_coord, start_pos, new_hex_n_turns)
                            self.first_row_start_coord = self._coord_calculator(self.first_row_start_coord, start_pos, first_row_n_turns)

                        ## for all internal hex's
                        else:
                            ## catch the last hex on odd rows
                            if col == self.x_count - 1 and row % 2:
                                end_pos = 'top'
                            else:
                                end_pos = 'top_right'

                            self._draw_hex('bottom_left', end_pos, self.new_hex_start_coord)
                            self.new_hex_start_coord = self._coord_calculator(self.new_hex_start_coord, 'bottom_left', 2)

                win.flip(clearBuffer = False)

            def _coord_calculator(self, start_coord, start_pos, n_turns):
                ## takes in a starting coordinate, starting pos, and number of calcs to do
                ## returns ending coord as [x, y]
                ## this function will fail if you try to turn past top left, which i dont think ill need to do

                ## calc a slice out of point_list to iterate over what's appropriate
                new_point_list = self._rearrange_point_list(start_pos)

                for pos in new_point_list[:n_turns]:
                    start_coord = eval(self.point_dictionary[pos])

                return start_coord



            def _draw_hex(self, start_pos, end_pos, start_coord):
                ## print_line_widths


                ## draws a line from start_pos to end_pos
                new_point_list = self._rearrange_point_list(start_pos)

                for position in new_point_list:
                    if start_pos != end_pos and position == end_pos:
                        break

                    if self.build_diagnostic_container:
                        self.diagnostic_container.append(['{}-{}-{}'.format(self.col, self.row, start_pos)])

                    line = self._define_line_type()
                    line.start = start_coord
                    line.end = eval(self.point_dictionary[position])
                    start_coord= line.end
                    line.draw()
                    #win.flip(clearBuffer = False)

            def _rearrange_point_list(self, start_pos):
                ## outputs a list where the first element is start_pos and the last element is the one before start_pos in point_list

                if start_pos == 'top_left':
                    return self.point_list

                return self.point_list[self.point_list.index(start_pos):] + self.point_list[:self.point_list.index(start_pos)-1]

            def _define_line_type(self):
                if not self.line_width_container_draw:
                    self.line_width_container_draw = copy.deepcopy(line_width_container_original)
                #lineWidth = self.line_width_container_draw.pop(0)
                ## print_line_widths
                lineWidth = self.line_width_container_draw[0]
                if lineWidth is None:
                    self.diagnostic_widths = self.line_width_container_draw
                else:
                    del self.line_width_container_draw[0]

                ## print_line_widths
                if self.build_diagnostic_container:
                    self.diagnostic_container[-1].append(lineWidth)

                return psychopy.visual.Line(
                    lineWidth = lineWidth,
                    win = win,
                    units='pix',
                    lineColor=[-1, -1, -1]
                    )
    CodeComponent LineWidthCalc
      Code Type = Py
      Before Experiment:
        import copy
      Begin Experiment:
        line_width_container = np.linspace(1, 4, 10)
        #line_width_container = [round(x, 4) for x in line_width_container]


        range_to_width = {}

        percentages = [.02, .07, .07] + [.17]*4 + [.07, .07, .02]

        base_percentage = 0
        for percentage, line_width in zip(percentages, line_width_container):
            range_to_width[base_percentage, base_percentage+percentage] = line_width
            base_percentage += percentage +.000001


        def choose_line_width():
            ## draw random from uniform distribution, choose line width
            random_number  = round(np.random.uniform(), 3)
            for key in range_to_width:
                if random_number >= key[0]  and random_number < key[1]:
                    return range_to_width[key]


        ## initialize full container
        line_width_container_original = []

        for i in range(400):
            line_width_container_original.append(choose_line_width())
      Begin Routine:
        line_width_container_original = []

        for i in range(400):
            line_width_container_original.append(choose_line_width())
  Routine trial2
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2_2
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        line = psychopy.visual.Line(
            win=win,
            units="pix",
            lineColor=[-1, -1, -1]
        )

        line.start = [-200, -200]
        line.end = [+200, +200]

        line.draw()

        win.flip()

        psychopy.event.waitKeys()

        win.close()
Flow
  Routine trial1
  Routine trial2_2
